PsychoPy2experiment version="2024.1.0"
Settings
  Data filename = 'data/%s_%s_%s' % (expInfo['participant'], expName, expInfo['date'])
  Experiment info = {'participant': '', 'session': '001', 'starting_level': '1'}
  Full-screen window = False
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = height
  Window color = white
  expName = math_paradigm
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Routines
  Routine welcome
    TextComponent welcome_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Welcome to the Mental Arithmetic Task

        You will solve addition problems.
        Type your answer using the keyboard.
        Press ENTER to submit.

        Press SPACE to begin.
    KeyboardComponent welcome_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions
    CodeComponent setup_code
      Code Type = Py
      Before Experiment:
        import random
        import numpy as np

        # Configuration
        BLOCK_DURATION = 170.0
        TASK_TIMEOUT = 18.0
        BREAK_DURATION = 4.0
        REST_DURATION = 20.0

        # Sequences
        SEQUENCES = [
            ['B', 'F', 'O', 'F', 'O', 'B', 'O', 'B', 'F'],
            ['B', 'O', 'F', 'O', 'F', 'B', 'F', 'B', 'O']
        ]

        # Select sequence
        sequence = random.choice(SEQUENCES)
        current_block_idx = 0
        current_level = int(expInfo['starting_level'])
        starting_level = current_level

        # Task generator functions
        def create_boredom_task():
            base = random.randint(100, 109)
            max_addend = min(9, 110 - base)
            addend = random.randint(1, max_addend)
            numbers = [base, addend]
            text = f'{base} + {addend}'
            answer = sum(numbers)
            return {'text': text, 'answer': answer, 'numbers': numbers}

        def create_task_at_level(level):
            numbers = []
            two_digit_count = level // 2
            one_digit_count = 2 if level % 2 == 0 else 1

            if two_digit_count == 0 and one_digit_count < 2:
                one_digit_count = 2

            for _ in range(two_digit_count):
                numbers.append(random.randint(10, 99))

            for _ in range(one_digit_count):
                numbers.append(random.randint(1, 9))

            random.shuffle(numbers)
            text = ' + '.join(str(n) for n in numbers)
            answer = sum(numbers)
            return {'text': text, 'answer': answer, 'numbers': numbers}

        # Initialize tracking
        consecutive_correct = 0
        consecutive_incorrect = 0
        task_results = []
        likert_responses = []
Flow
  Routine welcome
  Routine instructions
