PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = pix
  Window size (pixels) = [1280, 800]
  expName = go_nogo_dm
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine welcome
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    TextComponent welcome_text
      color = black
      letterHeight = 40
      startVal [time (s)] = 0.0
      wrapWidth = 1500
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      text:
        Herzlich willkommen zum Experiment "Go-Path"

        Bitte drücken Sie die Leertaste um fortzufahren
    KeyboardComponent welcome_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction
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    ImageComponent image
      image = Slide7.PNG
      size = (1536, 864)
      startVal [time (s)] = 0.0
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    KeyboardComponent inst_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial
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    TextComponent fixation
      letterHeight = 30
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.6
      text = +
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    PolygonComponent polygon_2
      fillColor = -1.0000, -1.0000, -1.0000
      pos = (0,-0.4)
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.6
      stopVal [duration (s)] = 1.2
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    PolygonComponent polygon_3
      fillColor = 1.0000, 1.0000, 1.0000
      pos = (0,0.4)
      shape = rectangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.6
      stopVal [duration (s)] = 1.2
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    MouseComponent mouse
      clickable = polygon_3
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.6
      stopVal [duration (s)] = 1.2
      syncScreenRefresh = True
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  Routine start_screen
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  Routine start_hold
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    TextComponent fixation_cross_3
      color = black
      letterHeight = 30
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    PolygonComponent start_box
      fillColor = -1.0000, -1.0000, 1.0000
      lineColor = black
      pos = (0, -400)
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 0
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    MouseComponent mouse_start
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
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      Begin Experiment:
        # Add this to Begin Experiment section of your first routine
        import time
        mouse_sampling_rate = 0.01  # 100 Hz sampling
      Begin Routine:
        # Reset variables
        hold_timer = core.Clock()
        hold_complete = False
        hold_duration = 0.5  # 500ms required hold time
        in_start_box = False

        # Initialize trajectory arrays
        last_mouse_sample_time_start = time.time()
        start_trajectory_x = []
        start_trajectory_y = []
        start_trajectory_time = []
        current_pos = [0, 0]

        if trials.thisN == 0:
            print("=== FINAL EXECUTION ORDER ===")
            for i, t in enumerate(trials.trialList):
                print(f"{i+1:02}: digit={t['digit']}, type={t['trial_type']}")
      Each Frame:
        current_time = time.time()
        current_pos = mouse_start.getPos()
        # Only record data at specified sampling rate
        if current_time - last_mouse_sample_time_start >= mouse_sampling_rate:
            # Get current mouse position with controlled sampling
            current_pos = mouse_start.getPos()
            current_frame_time = globalClock.getTime()

            # Add to trajectory with controlled sampling
            start_trajectory_x.append(current_pos[0])
            start_trajectory_y.append(current_pos[1])
            start_trajectory_time.append(current_frame_time)

            # Update last sample time
            last_mouse_sample_time_start = current_time

        # Check if mouse is in start box - by calculating if position is within box boundaries
        start_box_left = start_box.pos[0] - start_box.size[0]/2
        start_box_right = start_box.pos[0] + start_box.size[0]/2
        start_box_bottom = start_box.pos[1] - start_box.size[1]/2
        start_box_top = start_box.pos[1] + start_box.size[1]/2

        # Check if mouse position is within box boundaries
        tolerance = 5  # pixels
        mouse_in_box = (current_pos[0] >= start_box_left - tolerance and
                        current_pos[0] <= start_box_right + tolerance and
                        current_pos[1] >= start_box_bottom - tolerance and
                        current_pos[1] <= start_box_top + tolerance)

        # MODIFIED SECTION: Make sure we always start with blue box and reset timer at trial start
        if frameN <= 1:  # Only during the first frame of the routine
            in_start_box = False
            hold_timer.reset()
            start_box.fillColor = [-1, -1, 1]  # Set to blue at the start of trial

        if mouse_in_box:
            if not in_start_box:  # Just entered the box
                hold_timer.reset()
                in_start_box = True

            # Check if hold time is complete (500ms)
            if hold_timer.getTime() >= hold_duration:
                hold_complete = True
                start_box.fillColor = [-1, -1, -1]  # Change to black when hold complete
                continueRoutine = False  # End routine, move to next
        else:
            # Reset if mouse leaves box before hold is complete
            in_start_box = False
            hold_timer.reset()
            start_box.fillColor = [-1, -1, 1]  # Back to blue
      End Routine:
        # Record if hold was successful
        thisExp.addData('hold_complete', hold_complete)
        # End Routine code for start_hold
        thisExp.addData('start_trajectory_x', start_trajectory_x)
        thisExp.addData('start_trajectory_y', start_trajectory_y)
        thisExp.addData('start_trajectory_time', start_trajectory_time)
  Routine stimulus
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    CodeComponent code_6
      Code Type = Py
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      Begin Routine:
        # Display the digit loaded from the .xlsx file
        text_stimulus.setText(str(digit))
        print(f"Running trial: digit={digit}, type={trial_type}, expected={correct_response}")
    PolygonComponent start_box_3
      fillColor = black
      lineColor = black
      pos = (0, -400)
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 0.0
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    PolygonComponent response_box_2
      fillColor = white
      lineColor = black
      pos = (200, 300)
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 0.0
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    TextComponent text_stimulus
      color = black
      letterHeight = 72
      pos = (200, 300)
      startVal [time (s)] = 0.0
      text [set every repeat] = $digit
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    MouseComponent mouse_resp
      clickable = response_box_2
      correctAns = correct_response
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent code_3
      Code Type = Py
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      Begin Experiment:
        import numpy as np
      Begin Routine:
        # Initialize variables for response tracking
        trial_clock = core.Clock()
        max_response_time = 1.5  # 1500ms max response time
        last_mouse_sample_time_stimulus = time.time()
        # Track mouse positions
        mouse_positions = []
        mouse_timestamps = []

        # Response tracking
        response_made = False
        movement_continued = False
        movement_stopped = False
        last_positions = []  # For tracking if movement has stopped
        still_duration = 0
        correct = False

        # Convert stimulus to correct type
        current_digit = int(digit)

        # Add to the beginning of stimulus routine
        import numpy as np


        # Always re-initialize trajectory arrays at the beginning of each trial
        trajectory_x = []
        trajectory_y = []
        trajectory_time = []
        velocity_x = []
        velocity_y = []
        velocity_magnitude = []
        acceleration_x = []
        acceleration_y = []
        acceleration_magnitude = []
      Each Frame:
        # Run 'Each Frame' code from code_3
        current_time = time.time()
        # Get current mouse position for logic checks (needed every frame)
        current_pos = mouse_resp.getPos()
        current_trial_time = trial_clock.getTime()  # For trial logic
        # Real-time checks needed every frame for responsive user experience
        if mouse_resp.isPressedIn(response_box_2) and not response_made:
            response_made = True
            rt = current_trial_time  # Use trial time for RT
            buttons = mouse_resp.getPressed()
            clicked_in_box = buttons[0] > 0

            if trial_type == "go":
                correct = clicked_in_box
            else:
                correct = False

            click_pos = current_pos
            thisExp.addData('response_box_clicked', clicked_in_box)
            thisExp.addData('click_pos_x', click_pos[0])
            thisExp.addData('click_pos_y', click_pos[1])

            continueRoutine = False

        # Add position to recent positions list (for checking if stopped)
        last_positions.append(current_pos)
        if len(last_positions) > 15:  # Keep last ~250ms of positions
            last_positions.pop(0)

        # Check if movement has stopped (for No-Go trials)
        if len(last_positions) >= 15:
            pos_array = np.array(last_positions)
            max_distance = np.max(np.sqrt(np.sum((pos_array - pos_array[0])**2, axis=1)))

            if max_distance < 5:  # Less than 5 pixels movement = stopped
                movement_stopped = True
                still_duration += 1/60  # Assuming 60Hz refresh rate

                if still_duration >= 0.5 and trial_type == "nogo":
                    correct = True
                    rt = current_trial_time  # Use trial time for RT
                    continueRoutine = False
            else:
                still_duration = 0
                movement_stopped = False
                movement_continued = True

        # Check if time has run out
        if current_trial_time >= max_response_time:
            rt = max_response_time

            if trial_type == "nogo" and not movement_continued:
                correct = True
            elif trial_type == "go":
                correct = False

            continueRoutine = False

        # Only record data at specified sampling rate
        if current_time - last_mouse_sample_time_stimulus >= mouse_sampling_rate:
            current_global_time = globalClock.getTime()  # Get global time for trajectory data

            # Record position and time at controlled rate
            mouse_positions.append(current_pos)
            mouse_timestamps.append(current_global_time)  # Use global time for timestamps

            # Add to detailed trajectory data with controlled sampling
            trajectory_x.append(current_pos[0])
            trajectory_y.append(current_pos[1])
            trajectory_time.append(current_global_time)  # Use global time for timestamps

            # Calculate velocity if we have at least 2 points
            if len(trajectory_time) >= 2:
                dt = trajectory_time[-1] - trajectory_time[-2]
                if dt > 0:  # Avoid division by zero
                    vx = (trajectory_x[-1] - trajectory_x[-2]) / dt
                    vy = (trajectory_y[-1] - trajectory_y[-2]) / dt
                    velocity_x.append(vx)
                    velocity_y.append(vy)
                    velocity_magnitude.append(np.sqrt(vx**2 + vy**2))
                else:
                    velocity_x.append(0)
                    velocity_y.append(0)
                    velocity_magnitude.append(0)
            else:
                velocity_x.append(0)
                velocity_y.append(0)
                velocity_magnitude.append(0)

            # Calculate acceleration if we have at least 2 velocity points
            if len(velocity_x) >= 2:
                dt = trajectory_time[-1] - trajectory_time[-2]
                if dt > 0:  # Avoid division by zero
                    ax = (velocity_x[-1] - velocity_x[-2]) / dt
                    ay = (velocity_y[-1] - velocity_y[-2]) / dt
                    acceleration_x.append(ax)
                    acceleration_y.append(ay)
                    acceleration_magnitude.append(np.sqrt(ax**2 + ay**2))
                else:
                    acceleration_x.append(0)
                    acceleration_y.append(0)
                    acceleration_magnitude.append(0)
            else:
                acceleration_x.append(0)
                acceleration_y.append(0)
                acceleration_magnitude.append(0)

            # Update last sample time
            last_mouse_sample_time_stimulus = current_time
      End Routine:
        # Save data
        thisExp.addData('mouse_positions_x', [pos[0] for pos in mouse_positions])
        thisExp.addData('mouse_positions_y', [pos[1] for pos in mouse_positions])
        thisExp.addData('mouse_timestamps', mouse_timestamps)
        thisExp.addData('response_made', response_made)
        thisExp.addData('movement_continued', movement_continued)
        thisExp.addData('movement_stopped', movement_stopped)
        thisExp.addData('correct', correct)
        thisExp.addData('rt', rt)

        # Add to End Routine section of stimulus routine
        # Save all trajectory metrics
        thisExp.addData('trajectory_x', trajectory_x)
        thisExp.addData('trajectory_y', trajectory_y)
        thisExp.addData('trajectory_time', trajectory_time)
        thisExp.addData('velocity_x', velocity_x)
        thisExp.addData('velocity_y', velocity_y)
        thisExp.addData('velocity_magnitude', velocity_magnitude)
        thisExp.addData('acceleration_x', acceleration_x)
        thisExp.addData('acceleration_y', acceleration_y)
        thisExp.addData('acceleration_magnitude', acceleration_magnitude)

        # Calculate additional metrics
        if len(trajectory_x) > 2:
            # Maximum velocity and acceleration
            max_velocity = max(velocity_magnitude) if velocity_magnitude else np.nan
            max_acceleration = max(acceleration_magnitude) if acceleration_magnitude else np.nan

            # Average velocity and acceleration
            avg_velocity = sum(velocity_magnitude) / len(velocity_magnitude) if velocity_magnitude else np.nan
            avg_acceleration = sum(acceleration_magnitude) / len(acceleration_magnitude) if acceleration_magnitude else np.nan

            # Initial movement direction (degrees)
            if len(trajectory_y) > 10:
                initial_direction = np.degrees(np.arctan2(
                    trajectory_y[10] - trajectory_y[0],
                    trajectory_x[10] - trajectory_x[0]
                ))
            else:
                # Not enough points, use the last available point instead
                last_idx = len(trajectory_y) - 1
                if last_idx > 0:  # Make sure we have at least 2 points
                    initial_direction = np.degrees(np.arctan2(
                        trajectory_y[last_idx] - trajectory_y[0],
                        trajectory_x[last_idx] - trajectory_x[0]
                    ))
                else:
                    initial_direction = np.nan  # Not enough points to calculate direction

            # Movement time
            movement_time = trajectory_time[-1] - trajectory_time[0]

            # Initiation time (time to start moving)
            initiation_threshold = 5  # pixels
            for i in range(1, len(trajectory_x)):
                distance = np.sqrt((trajectory_x[i] - trajectory_x[0])**2 +
                                (trajectory_y[i] - trajectory_y[0])**2)
                if distance > initiation_threshold:
                    initiation_time = trajectory_time[i] - trajectory_time[0]
                    break
            else:
                initiation_time = np.nan

            # Calculate trajectory curvature
            # (comparing direct path to actual path)
            start_point = (trajectory_x[0], trajectory_y[0])
            end_point = (trajectory_x[-1], trajectory_y[-1])
            direct_distance = np.sqrt(
                (end_point[0] - start_point[0])**2 +
                (end_point[1] - start_point[1])**2
            )

            # Calculate actual path length
            path_length = 0
            for i in range(1, len(trajectory_x)):
                segment = np.sqrt(
                    (trajectory_x[i] - trajectory_x[i-1])**2 +
                    (trajectory_y[i] - trajectory_y[i-1])**2
                )
                path_length += segment

            # Maximum deviation from direct path
            if direct_distance > 0:
                # Get vector for direct path
                direct_vector = np.array([
                    end_point[0] - start_point[0],
                    end_point[1] - start_point[1]
                ])
                unit_direct = direct_vector / np.linalg.norm(direct_vector)

                # Calculate perpendicular distance for each point
                max_deviation = 0
                for i in range(len(trajectory_x)):
                    point_vector = np.array([
                        trajectory_x[i] - start_point[0],
                        trajectory_y[i] - start_point[1]
                    ])

                    # Project onto direct path
                    projection_length = np.dot(point_vector, unit_direct)
                    projection = unit_direct * projection_length

                    # Calculate perpendicular distance
                    deviation = np.linalg.norm(point_vector - projection)
                    max_deviation = max(max_deviation, deviation)
            else:
                max_deviation = 0

            # AUC (Area Under Curve) - simplified calculation
            auc = max_deviation * direct_distance / 2

            # Calculate path curvature
            path_curvature = path_length / direct_distance if direct_distance > 0 else np.nan

            # Movement smoothness (spectral arc length)
            # Simplified approximation using velocity profile
            if len(velocity_magnitude) > 3:
            # Calculate differences in velocity
                velocity_changes = []
                for i in range(1, len(velocity_magnitude)):
                    velocity_changes.append(abs(velocity_magnitude[i] - velocity_magnitude[i-1]))
                smoothness = -sum(velocity_changes)
            else:
                smoothness = np.nan

            # Save calculated metrics
            thisExp.addData('max_velocity', max_velocity)
            thisExp.addData('avg_velocity', avg_velocity)
            thisExp.addData('max_acceleration', max_acceleration)
            thisExp.addData('avg_acceleration', avg_acceleration)
            thisExp.addData('initial_direction', initial_direction)
            thisExp.addData('movement_time', movement_time)
            thisExp.addData('initiation_time', initiation_time)
            thisExp.addData('path_length', path_length)
            thisExp.addData('direct_distance', direct_distance)
            thisExp.addData('max_deviation', max_deviation)
            thisExp.addData('path_curvature', path_curvature)
            thisExp.addData('auc', auc)
            thisExp.addData('movement_smoothness', smoothness)
        else:
            # Handle cases with insufficient data points
            missing_value = np.nan
            thisExp.addData('max_velocity', missing_value)
            thisExp.addData('avg_velocity', missing_value)
            thisExp.addData('max_acceleration', missing_value)
            thisExp.addData('avg_acceleration', missing_value)
            thisExp.addData('initial_direction', missing_value)
            thisExp.addData('movement_time', missing_value)
            thisExp.addData('initiation_time', missing_value)
            thisExp.addData('path_length', missing_value)
            thisExp.addData('direct_distance', missing_value)
            thisExp.addData('max_deviation', missing_value)
            thisExp.addData('path_curvature', missing_value)
            thisExp.addData('auc', missing_value)
            thisExp.addData('movement_smoothness', missing_value)

        # Add to End Routine in stimulus
        # For NoGo trials
        if trial_type == "nogo":
            # Calculate distance moved after stimulus onset
            if len(trajectory_x) > 2:
                post_stimulus_distance = 0
                for i in range(1, len(trajectory_x)):
                    segment = np.sqrt(
                        (trajectory_x[i] - trajectory_x[i-1])**2 +
                        (trajectory_y[i] - trajectory_y[i-1])**2
                    )
                    post_stimulus_distance += segment

                # Maximum velocity after stimulus in NoGo trials
                max_post_stim_velocity = max(velocity_magnitude) if velocity_magnitude else np.nan

                # Time to stop after stimulus onset
                stop_threshold = 5  # pixels per second
                time_to_stop = np.nan
                if len(velocity_magnitude) > 1 and len(trajectory_time) > 1:
                    for i in range(1, len(velocity_magnitude)):
                        if i < len(trajectory_time) and velocity_magnitude[i] < stop_threshold:
                            # Found a stop
                            time_to_stop = trajectory_time[i]
                            break

                thisExp.addData('post_stimulus_distance', post_stimulus_distance)
                thisExp.addData('max_post_stim_velocity', max_post_stim_velocity)
                thisExp.addData('time_to_stop', time_to_stop)
            else:
                thisExp.addData('post_stimulus_distance', np.nan)
                thisExp.addData('max_post_stim_velocity', np.nan)
                thisExp.addData('time_to_stop', np.nan)

        # Add to End Routine in code_3
        # Create a clear categorical accuracy label
        if trial_type == "go":
            if correct:
                accuracy_type = "correct_go"  # Clicked in response box
            else:
                accuracy_type = "failed_go"   # Didn't respond in time
        else:  # nogo trial
            if correct:
                if movement_continued:
                    accuracy_type = "correct_nogo_stopped"  # Started moving but stopped
                else:
                    accuracy_type = "correct_nogo_never_moved"  # Never moved
            else:
                accuracy_type = "failed_nogo"  # Clicked or continued moving

        thisExp.addData('accuracy_type', accuracy_type)

        # Add to End Routine in code_3
        # For NoGo trials, calculate additional metrics
        if trial_type == "nogo":
            # Calculate total movement during nogo trial
            total_movement = 0
            if len(trajectory_x) > 1:
                for i in range(1, len(trajectory_x)):
                    segment = np.sqrt(
                        (trajectory_x[i] - trajectory_x[i-1])**2 +
                        (trajectory_y[i] - trajectory_y[i-1])**2
                    )
                    total_movement += segment

                # Calculate max distance from starting position
                start_pos = np.array([trajectory_x[0], trajectory_y[0]])
                max_distance_from_start = 0
                for i in range(1, len(trajectory_x)):
                    current_pos = np.array([trajectory_x[i], trajectory_y[i]])
                    distance = np.linalg.norm(current_pos - start_pos)
                    max_distance_from_start = max(max_distance_from_start, distance)

                thisExp.addData('nogo_total_movement', total_movement)
                thisExp.addData('nogo_max_distance', max_distance_from_start)
            else:
                thisExp.addData('nogo_total_movement', 0)
                thisExp.addData('nogo_max_distance', 0)
  Routine ITI
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    CodeComponent code_4
      Code Type = Py
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      Begin Experiment:
        # Set up possible ITI durations
        possible_iti_durations = [0.5, 0.6, 0.7, 0.8, 0.9, 1.0]  # 500-1000ms in 100ms increments

        # Add a mouse component for the ITI period
        mouse_iti = event.Mouse(win=win)
        x, y = [None, None]
        mouse_iti.mouseClock = core.Clock()
        # Initialize trajectory arrays
        # Always re-initialize ITI trajectory arrays
        iti_trajectory_x = []
        iti_trajectory_y = []
        iti_trajectory_time = []
        iti_velocity_x = []
        iti_velocity_y = []
        iti_velocity_mag = []
      Begin Routine:
        # Hide the mouse cursor during ITI
        win.mouseVisible = False
        last_mouse_sample_time_iti = time.time()
        # Choose a random ITI duration for this trial
        import random
        this_iti_duration = random.choice(possible_iti_durations)
        thisExp.addData('iti_duration', this_iti_duration)  # Record the selected duration

        # Initialize variables for ITI tracking
        iti_trajectory_x = []
        iti_trajectory_y = []
        iti_trajectory_time = []
        iti_velocity_x = []
        iti_velocity_y = []
        iti_velocity_mag = []
      Each Frame:
        # Run 'Each Frame' code from code_4
        current_time = time.time()
        # Get current mouse position
        current_pos = mouse_iti.getPos()
        current_frame_time = globalClock.getTime()

        # Only record data at specified sampling rate
        if current_time - last_mouse_sample_time_iti >= mouse_sampling_rate:
            # Track mouse movement during ITI at controlled rate
            iti_trajectory_x.append(current_pos[0])
            iti_trajectory_y.append(current_pos[1])
            iti_trajectory_time.append(current_frame_time)

            # Calculate velocity if we have at least 2 points
            if len(iti_trajectory_time) >= 2:
                dt = iti_trajectory_time[-1] - iti_trajectory_time[-2]
                if dt > 0:  # Avoid division by zero
                    vx = (iti_trajectory_x[-1] - iti_trajectory_x[-2]) / dt
                    vy = (iti_trajectory_y[-1] - iti_trajectory_y[-2]) / dt
                    iti_velocity_x.append(vx)
                    iti_velocity_y.append(vy)
                    iti_velocity_mag.append(np.sqrt(vx**2 + vy**2))
                else:
                    iti_velocity_x.append(0)
                    iti_velocity_y.append(0)
                    iti_velocity_mag.append(0)
            else:
                iti_velocity_x.append(0)
                iti_velocity_y.append(0)
                iti_velocity_mag.append(0)

            # Update last sample time
            last_mouse_sample_time_iti = current_time
      End Routine:
        # Make mouse visible again and reset position
        win.mouseVisible = True
        # Save ITI mouse tracking data
        thisExp.addData('iti_trajectory_x', iti_trajectory_x)
        thisExp.addData('iti_trajectory_y', iti_trajectory_y)
        thisExp.addData('iti_trajectory_time', iti_trajectory_time)
        thisExp.addData('iti_velocity_x', iti_velocity_x)
        thisExp.addData('iti_velocity_y', iti_velocity_y)
        thisExp.addData('iti_velocity_mag', iti_velocity_mag)

        # Calculate ITI movement metrics
        if len(iti_trajectory_x) > 2:
            # Calculate total distance moved during ITI
            iti_total_movement = 0
            for i in range(1, len(iti_trajectory_x)):
                segment = np.sqrt(
                    (iti_trajectory_x[i] - iti_trajectory_x[i-1])**2 +
                    (iti_trajectory_y[i] - iti_trajectory_y[i-1])**2
                )
                iti_total_movement += segment

            # Calculate average velocity during ITI
            iti_avg_velocity = sum(iti_velocity_mag) / len(iti_velocity_mag) if iti_velocity_mag else 0

            # Calculate max velocity during ITI
            iti_max_velocity = max(iti_velocity_mag) if iti_velocity_mag else 0

            # Save ITI movement summary metrics
            thisExp.addData('iti_total_movement', iti_total_movement)
            thisExp.addData('iti_avg_velocity', iti_avg_velocity)
            thisExp.addData('iti_max_velocity', iti_max_velocity)

            # Determine if significant movement occurred during ITI
            # (e.g., more than 50 pixels of movement is considered significant)
            iti_significant_movement = iti_total_movement > 50
            thisExp.addData('iti_significant_movement', iti_significant_movement)
        else:
            thisExp.addData('iti_total_movement', 0)
            thisExp.addData('iti_avg_velocity', 0)
            thisExp.addData('iti_max_velocity', 0)
            thisExp.addData('iti_significant_movement', False)

        # Make mouse visible again for next trial
        win.mouseVisible = True
    TextComponent blank
      letterHeight = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = this_iti_duration
      text = .
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    MouseComponent mouse_iti
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine timeout_feedback
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    CodeComponent code_5
      Code Type = Py
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      Begin Routine:
        # Check if this routine should run (only after a timeout)
        # Get last entry in data
        entries = thisExp.getAllEntries()
        show_routine = False

        # Initialize the timeout_occurred variable if it doesn't exist yet
        if not 'timeout_occurred' in thisExp.dataNames:
            timeout_occurred = False
            thisExp.addData('timeout_occurred', False)
        # If we have data and the last trial had a timeout
        elif len(entries) > 0 and 'timeout_occurred' in entries[-1]:
            show_routine = entries[-1]['timeout_occurred']

        # Skip this routine if we don't need to show feedback
        continueRoutine = show_routine
    TextComponent timeout_text
      letterHeight = 25
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Too slow! Move upwards to start the trial.
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  Routine threshold
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    PolygonComponent start_box_2
      fillColor = black
      lineColor = black
      pos = (0, -400)
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 0.0
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    PolygonComponent response_box
      fillColor = white
      lineColor = black
      pos = (200, 300)
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_fix
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Py
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      Begin Routine:
        # Initialize variables
        start_pos = [0, -400]  # Start box position
        threshold_y = start_pos[1] + 100  # 100px above start box
        corridor_width = 300  # Width of movement corridor

        last_mouse_sample_time_threshold = time.time()
        movement_initiated = False
        threshold_crossed = False
        fix_timer = core.Clock()
        max_wait_time = 5.0  # 5000ms max wait for movement
        timeout_occurred = False

        # Initialize trajectory arrays
        # Always re-initialize arrays for each trial
        threshold_trajectory_x = []
        threshold_trajectory_y = []
        threshold_trajectory_time = []
        threshold_velocity_x = []
        threshold_velocity_y = []
        threshold_velocity_mag = []
      Each Frame:
        # Run 'Each Frame' code from code_2
        current_time = time.time()
        # Get current mouse position for logic checks (needed every frame)
        current_pos = mouse_fix.getPos()

        # Movement checks needed every frame for responsive user experience
        if current_pos[1] > start_pos[1] and not movement_initiated:
            movement_initiated = True

        in_corridor = abs(current_pos[0] - start_pos[0]) <= corridor_width/2

        if movement_initiated and in_corridor and current_pos[1] >= threshold_y and not threshold_crossed:
            threshold_crossed = True
            continueRoutine = False  # Move to stimulus routine

        if fix_timer.getTime() >= max_wait_time and not movement_initiated:
            timeout_occurred = True
            continueRoutine = False  # End routine

        # Only record data at specified sampling rate
        if current_time - last_mouse_sample_time_threshold >= mouse_sampling_rate:
            current_frame_time = globalClock.getTime()

            # Add to trajectory with controlled sampling
            threshold_trajectory_x.append(current_pos[0])
            threshold_trajectory_y.append(current_pos[1])
            threshold_trajectory_time.append(current_frame_time)

            # Calculate velocity if we have at least 2 points
            if len(threshold_trajectory_time) >= 2:
                dt = threshold_trajectory_time[-1] - threshold_trajectory_time[-2]
                if dt > 0:  # Avoid division by zero
                    vx = (threshold_trajectory_x[-1] - threshold_trajectory_x[-2]) / dt
                    vy = (threshold_trajectory_y[-1] - threshold_trajectory_y[-2]) / dt
                    threshold_velocity_x.append(vx)
                    threshold_velocity_y.append(vy)
                    threshold_velocity_mag.append(np.sqrt(vx**2 + vy**2))
                else:
                    threshold_velocity_x.append(0)
                    threshold_velocity_y.append(0)
                    threshold_velocity_mag.append(0)
            else:
                threshold_velocity_x.append(0)
                threshold_velocity_y.append(0)
                threshold_velocity_mag.append(0)

            # Update last sample time
            last_mouse_sample_time_threshold = current_time
      End Routine:
        # Record movement data
        thisExp.addData('movement_initiated', movement_initiated)
        thisExp.addData('threshold_crossed', threshold_crossed)
        thisExp.addData('movement_time', fix_timer.getTime())
        thisExp.addData('timeout_occurred', timeout_occurred)
        # End Routine code for threshold
        thisExp.addData('threshold_trajectory_x', threshold_trajectory_x)
        thisExp.addData('threshold_trajectory_y', threshold_trajectory_y)
        thisExp.addData('threshold_trajectory_time', threshold_trajectory_time)
        thisExp.addData('threshold_velocity_x', threshold_velocity_x)
        thisExp.addData('threshold_velocity_y', threshold_velocity_y)
        thisExp.addData('threshold_velocity_mag', threshold_velocity_mag)

        # Calculate additional threshold metrics
        if len(threshold_trajectory_x) > 2:
            # Initial acceleration (time from movement start to peak velocity)
            if len(threshold_velocity_mag) > 2:
                peak_vel_idx = threshold_velocity_mag.index(max(threshold_velocity_mag))
                if peak_vel_idx < len(threshold_trajectory_time) and peak_vel_idx > 0:
                    initial_accel_time = threshold_trajectory_time[peak_vel_idx] - threshold_trajectory_time[0]
                else:
                    initial_accel_time = np.nan
            else:
                initial_accel_time = np.nan

            # Movement path during threshold crossing
            threshold_path_length = 0
            for i in range(1, len(threshold_trajectory_x)):
                segment = np.sqrt(
                    (threshold_trajectory_x[i] - threshold_trajectory_x[i-1])**2 +
                    (threshold_trajectory_y[i] - threshold_trajectory_y[i-1])**2
                )
                threshold_path_length += segment

            thisExp.addData('threshold_initial_accel_time', initial_accel_time)
            thisExp.addData('threshold_path_length', threshold_path_length)
            thisExp.addData('threshold_max_velocity', max(threshold_velocity_mag) if threshold_velocity_mag else np.nan)
        else:
            thisExp.addData('threshold_initial_accel_time', np.nan)
            thisExp.addData('threshold_path_length', np.nan)
            thisExp.addData('threshold_max_velocity', np.nan)
  Routine fixation_2
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    TextComponent fixation_cross_2
      color = black
      letterHeight = 30
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    CodeComponent code_7
      Code Type = Py
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      Begin Routine:
        # Only run on the first iteration
        if trials.thisN == 0:
            # Replace the trial list with our custom sequence
            trials.trialList = current_trials
            trials.nTotal = len(current_trials)

            # Reset the trial handler
            trials.finished = False
            trials._trialList = current_trials

        # Get the current trial's parameters
        current_trial = current_trials[trials.thisN]
        digit = current_trial['digit']
        trial_type = current_trial['trial_type']
        correct_response = current_trial['correct_response']
        # Hide the mouse cursor during ITI
        win.mouseVisible = False

        # Start continuous mouse tracking
        mouse_track_data = {
            'x': [],
            'y': [],
            'time': [],
            'velocity_x': [],
            'velocity_y': [],
            'clicks': [],
            'click_time': []
        }
        mouse_track_clock = core.Clock()
        prev_x, prev_y = (0,0)
        prev_time = 0
      Each Frame:
        # Record mouse data every frame
        current_pos = mouse_tracking.getPos()
        current_time = mouse_track_clock.getTime()
        mouse_track_data['x'].append(current_pos[0])
        mouse_track_data['y'].append(current_pos[1])
        mouse_track_data['time'].append(current_time)

        # Calculate velocity (if not first frame)
        if len(mouse_track_data['time']) > 1:
            dt = current_time - prev_time
            if dt > 0:  # Avoid division by zero
                vx = (current_pos[0] - prev_x) / dt
                vy = (current_pos[1] - prev_y) / dt
            else:
                vx, vy = 0, 0
            mouse_track_data['velocity_x'].append(vx)
            mouse_track_data['velocity_y'].append(vy)
        else:
            mouse_track_data['velocity_x'].append(0)
            mouse_track_data['velocity_y'].append(0)

        # Record clicks
        buttons = mouse_tracking.getPressed()
        mouse_track_data['clicks'].append(buttons[0])  # Left button
        if buttons[0] == 1 and len(mouse_track_data['clicks']) > 1 and mouse_track_data['clicks'][-2] == 0:
            # New click detected
            mouse_track_data['click_time'].append(current_time)

        # Update previous values for next frame
        prev_x, prev_y = current_pos
        prev_time = current_time
      End Routine:
        # Make mouse visible again and reset position
        win.mouseVisible = True
    MouseComponent mouse_tracking
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine instruction_2
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    ImageComponent image_2
      image = Slide8.PNG
      size = (1536, 864)
      startVal [time (s)] = 0.0
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    KeyboardComponent inst_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fix_prac
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  Routine break_prac2
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    TextComponent break_prac
      letterHeight = 50
      startVal [time (s)] = 0.0
      wrapWidth = 1000
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      text:
        Pause!

        Please take a break. Press space bar to contine
    KeyboardComponent welcome_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine expStart
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    TextComponent exp_start_inst
      color = black
      letterHeight = 40
      startVal [time (s)] = 0.0
      wrapWidth = 1500
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      text:
        Es werden zwei Übungsdurchläufe durchgeführt:

        Block 1: Sie sehen nur die Ziffern „go“ (2, 3, 4, 6, 7 oder 8). Bitte bewegen Sie die Maus auf das weiße Feld, um zu antworten.

        Block 2: Hier sehen Sie neben den Go-Ziffern gelegentlich auch die No-Go-Ziffern (1 oder 9).

        Bitte halten Sie die Bewegung sofort an, wenn Sie die No-Go-Ziffer sehen.
        Reagieren Sie mit einem Klick in das weiße Feld, wenn Sie eine Go-Ziffer sehen.


        Drücken Sie die Leertaste, um mit Block 1 der Übungsversuche zu beginnen.
    KeyboardComponent resp_Exp_begin
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine block_setup
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    CodeComponent code_9
      Code Type = Py
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      Begin Routine:
        import pandas as pd
        import random

        block_type = thisBlocks_loop['block_type']
        trials_file = thisBlocks_loop['trials_file']
        data_folder = os.path.dirname(filename)

        # Default path from Excel file
        original_file = trials_file

        # If it's go_nogo, apply the NoGo constraint
        if block_type == "go_nogo":
            df = pd.read_excel(original_file)

            for attempt in range(1000):
                df_shuffled = df.sample(frac=1).reset_index(drop=True)
                nogo_indices = df_shuffled.index[df_shuffled['trial_type'] == 'nogo'].tolist()
                if all(nogo_indices[i+1] - nogo_indices[i] >= 2 for i in range(len(nogo_indices) - 1)):
                    print(f"✅ Valid Go+NoGo sequence created on attempt {attempt+1}")
                    break
            else:
                print("⚠️ Could not create valid sequence — using unshuffled.")
                df_shuffled = df

            trials_file = os.path.join(data_folder, "temp_go_nogo_shuffled.xlsx")
            df_shuffled.to_excel(trials_file, index=False)

        elif block_type in ["go_only", "go_only_prac", "go_nogo_prac"]:
            df = pd.read_excel(original_file)
            df_shuffled = df.sample(frac=1).reset_index(drop=True)
            trials_file = os.path.join(data_folder, f"temp_{block_type}_shuffled.xlsx")
            df_shuffled.to_excel(trials_file, index=False)
            print(f"✅ Shuffled {block_type} saved to {trials_file}")

        else:
            print(f"⚠️ Unrecognized block_type: {block_type}")
  Routine block_end
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    CodeComponent code_8
      Code Type = Py
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      Begin Routine:
        # Get current block number and type
        block_number = blocks_loop.getCurrentTrial()['block_number']
        current_block_type = blocks_loop.getCurrentTrial()['block_type']

        # Look ahead to get next block type (if there is one)
        next_block_type = ""
        try:
            # Find the next trial in sequence
            if blocks_loop.thisTrialN + 1 < len(blocks_loop.trialList):
                next_block_type = blocks_loop.trialList[blocks_loop.thisTrialN + 1]['block_type']
            else:
                next_block_type = "none"  # Last block
        except:
            next_block_type = "none"

        # Based on the current block and the type of the next block
        if block_number == 1:  # After first practice block (go_only)
            block_end_text.text = "Übungsblock 1 ist abgeschlossen. Im nächsten Block werden Sie No-Go- zusammen mit Go-Versuchen üben. Zur Erinnerung: halten Sie die Bewegung an, sobald Sie eine 1 oder 9 sehen.\n\nDrücken Sie die Leertaste, um fortzufahren."
        elif block_number == 2:  # After second practice block (go_nogo_prac)
            block_end_text.text = "Die Übung ist abgeschlossen. Nun beginnen Sie mit dem Experiment. Im nächsten Block werden Sie nur Go-Versuche sehen. Reagieren Sie also, indem Sie in die weiße Box klicken.\n\nDrücken Sie die Leertaste, um fortzufahren."
        elif block_number == 15:  # Final block
            block_end_text.text = "Das Experiment ist abgeschlossen. Vielen Dank für Ihre Teilnahme!"
        elif next_block_type == "go_only":  # Next block will be go_only
            block_end_text.text = "Machen Sie bei Bedarf eine Pause. Als nächstes werden Sie nur Go-Versuche sehen. Reagieren Sie, indem Sie in die weiße Box klicken.\n\nDrücken Sie die Leertaste, um fortzufahren."
        elif next_block_type == "go_nogo":  # Next block will be go_nogo
            block_end_text.text = "Machen Sie bei Bedarf eine Pause. Als nächstes werden Sie sowohl Go- als auch No-Go-Versuche sehen. Zur Erinnerung: halten Sie die Bewegung an, sobald Sie eine 1 oder 9 sehen. \n\nDrücken Sie die Leertaste, um fortzufahren."
        else:
            block_end_text.text = "Machen Sie bei Bedarf eine Pause.\n\nDrücken Sie die Leertaste, um fortzufahren"

        # Print for debugging
        print(f"Block transition: {block_number} ({current_block_type}) → Next: {next_block_type}")
    TextComponent block_end_text
      color = black
      letterHeight = 40
      startVal [time (s)] = 0.0
      wrapWidth = 1500
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    KeyboardComponent resp_Exp_begin_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fix_prac_2
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    TextComponent fixation_cross
      letterHeight = 30
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    CodeComponent code_10
      Code Type = Py
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      Begin Routine:
        # Hide the mouse cursor during ITI
        win.mouseVisible = False

        # Start continuous mouse tracking
        mouse_track_data = {
            'x': [],
            'y': [],
            'time': [],
            'velocity_x': [],
            'velocity_y': [],
            'clicks': [],
            'click_time': []
        }
        mouse_track_clock = core.Clock()
        prev_x, prev_y = (0,0)
        prev_time = 0
      Each Frame:
        # Record mouse data every frame
        current_pos = mouse_tracking.getPos()
        current_time = mouse_track_clock.getTime()
        mouse_track_data['x'].append(current_pos[0])
        mouse_track_data['y'].append(current_pos[1])
        mouse_track_data['time'].append(current_time)

        # Calculate velocity (if not first frame)
        if len(mouse_track_data['time']) > 1:
            dt = current_time - prev_time
            if dt > 0:  # Avoid division by zero
                vx = (current_pos[0] - prev_x) / dt
                vy = (current_pos[1] - prev_y) / dt
            else:
                vx, vy = 0, 0
            mouse_track_data['velocity_x'].append(vx)
            mouse_track_data['velocity_y'].append(vy)
        else:
            mouse_track_data['velocity_x'].append(0)
            mouse_track_data['velocity_y'].append(0)

        # Record clicks
        buttons = mouse_tracking.getPressed()
        mouse_track_data['clicks'].append(buttons[0])  # Left button
        if buttons[0] == 1 and len(mouse_track_data['clicks']) > 1 and mouse_track_data['clicks'][-2] == 0:
            # New click detected
            mouse_track_data['click_time'].append(current_time)

        # Update previous values for next frame
        prev_x, prev_y = current_pos
        prev_time = current_time
      End Routine:
        # Make mouse visible again and reset position
        win.mouseVisible = True
    MouseComponent mouse_tracking_2
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine starthold_prac
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    PolygonComponent start_box_4
      fillColor = -1.0000, -1.0000, 1.0000
      lineColor = black
      pos = (0, -400)
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 0
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    MouseComponent mouse_start_2
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      startVal [time (s)] = 0.0
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    CodeComponent code_11
      Code Type = Py
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      Begin Routine:
        # Reset variables
        hold_timer = core.Clock()
        hold_complete = False
        hold_duration = 0.5  # 500ms required hold time
        in_start_box = False
      Each Frame:
        # Get current mouse position
        current_pos = mouse_start.getPos()

        # Check if mouse is in start box - by calculating if position is within box boundaries
        start_box_left = start_box.pos[0] - start_box.size[0]/2
        start_box_right = start_box.pos[0] + start_box.size[0]/2
        start_box_bottom = start_box.pos[1] - start_box.size[1]/2
        start_box_top = start_box.pos[1] + start_box.size[1]/2

        # Check if mouse position is within box boundaries
        mouse_in_box = (current_pos[0] >= start_box_left and
                        current_pos[0] <= start_box_right and
                        current_pos[1] >= start_box_bottom and
                        current_pos[1] <= start_box_top)

        if mouse_in_box:
            if not in_start_box:  # Just entered the box
                hold_timer.reset()
                in_start_box = True

            # Check if hold time is complete (500ms)
            if hold_timer.getTime() >= hold_duration:
                hold_complete = True
                start_box.fillColor = [-1, -1, -1]  # Change to black when hold complete
                continueRoutine = False  # End routine, move to next
        else:
            # Reset if mouse leaves box before hold is complete
            in_start_box = False
            hold_timer.reset()
            start_box.fillColor = [-1, -1, 1]  # Back to blue

        # Record mouse data every frame
        current_pos = mouse_tracking.getPos()
        current_time = mouse_track_clock.getTime()
        mouse_track_data['x'].append(current_pos[0])
        mouse_track_data['y'].append(current_pos[1])
        mouse_track_data['time'].append(current_time)

        # Calculate velocity (if not first frame)
        if len(mouse_track_data['time']) > 1:
            dt = current_time - prev_time
            if dt > 0:  # Avoid division by zero
                vx = (current_pos[0] - prev_x) / dt
                vy = (current_pos[1] - prev_y) / dt
            else:
                vx, vy = 0, 0
            mouse_track_data['velocity_x'].append(vx)
            mouse_track_data['velocity_y'].append(vy)
        else:
            mouse_track_data['velocity_x'].append(0)
            mouse_track_data['velocity_y'].append(0)

        # Record clicks
        buttons = mouse_tracking.getPressed()
        mouse_track_data['clicks'].append(buttons[0])  # Left button
        if buttons[0] == 1 and len(mouse_track_data['clicks']) > 1 and mouse_track_data['clicks'][-2] == 0:
            # New click detected
            mouse_track_data['click_time'].append(current_time)

        # Update previous values for next frame
        prev_x, prev_y = current_pos
        prev_time = current_time
      End Routine:
        # Record if hold was successful
        thisExp.addData('hold_complete', hold_complete)
  Routine threshold_prac
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    PolygonComponent start_box_5
      fillColor = black
      lineColor = black
      pos = (0, -400)
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 0.0
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    PolygonComponent response_box_3
      fillColor = white
      lineColor = black
      pos = (200, 400)
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_fix_2
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      startVal [time (s)] = 0.0
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    CodeComponent code_12
      Code Type = Py
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      Begin Routine:
        # Initialize variables
        start_pos = [0, -400]  # Start box position
        threshold_y = start_pos[1] + 100  # 100px above start box
        corridor_width = 300  # Width of movement corridor

        movement_initiated = False
        threshold_crossed = False
        fix_timer = core.Clock()
        max_wait_time = 5.0  # 5000ms max wait for movement
        timeout_occurred = False
      Each Frame:
        # Get current mouse position
        current_pos = mouse_fix.getPos()

        # Check if mouse is moving upward
        if current_pos[1] > start_pos[1] and not movement_initiated:
            movement_initiated = True

        # Check if mouse is within corridor
        in_corridor = abs(current_pos[0] - start_pos[0]) <= corridor_width/2

        # Check if threshold is crossed within corridor
        if movement_initiated and in_corridor and current_pos[1] >= threshold_y and not threshold_crossed:
            threshold_crossed = True
            continueRoutine = False  # Move to stimulus routine

        # Check for timeout
        if fix_timer.getTime() >= max_wait_time and not movement_initiated:
            timeout_occurred = True
            continueRoutine = False  # End routine


        # Record mouse data every frame
        current_pos = mouse_tracking.getPos()
        current_time = mouse_track_clock.getTime()
        mouse_track_data['x'].append(current_pos[0])
        mouse_track_data['y'].append(current_pos[1])
        mouse_track_data['time'].append(current_time)

        # Calculate velocity (if not first frame)
        if len(mouse_track_data['time']) > 1:
            dt = current_time - prev_time
            if dt > 0:  # Avoid division by zero
                vx = (current_pos[0] - prev_x) / dt
                vy = (current_pos[1] - prev_y) / dt
            else:
                vx, vy = 0, 0
            mouse_track_data['velocity_x'].append(vx)
            mouse_track_data['velocity_y'].append(vy)
        else:
            mouse_track_data['velocity_x'].append(0)
            mouse_track_data['velocity_y'].append(0)

        # Record clicks
        buttons = mouse_tracking.getPressed()
        mouse_track_data['clicks'].append(buttons[0])  # Left button
        if buttons[0] == 1 and len(mouse_track_data['clicks']) > 1 and mouse_track_data['clicks'][-2] == 0:
            # New click detected
            mouse_track_data['click_time'].append(current_time)

        # Update previous values for next frame
        prev_x, prev_y = current_pos
        prev_time = current_time
      End Routine:
        # Record movement data
        thisExp.addData('movement_initiated', movement_initiated)
        thisExp.addData('threshold_crossed', threshold_crossed)
        thisExp.addData('movement_time', fix_timer.getTime())
        thisExp.addData('timeout_occurred', timeout_occurred)
  Routine stimulus_prac
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    CodeComponent code_13
      Code Type = Auto->JS
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      Begin Routine:
        # Skip this routine if there was a timeout
        entries = thisExp.getAllEntries()
        skip_routine = False

        if len(entries) > 0 and 'timeout_occurred' in entries[-1]:
            skip_routine = entries[-1]['timeout_occurred']

        if skip_routine:
            continueRoutine = False
    PolygonComponent start_box_6
      fillColor = black
      lineColor = black
      pos = (0, -400)
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 0.0
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    PolygonComponent response_box_4
      fillColor = white
      lineColor = black
      pos = (200, 400)
      shape = rectangle
      size = (100, 100)
      startVal [time (s)] = 0.0
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    TextComponent text_stimulus_2
      color = black
      letterHeight = 72
      pos = (200, 400)
      startVal [time (s)] = 0.0
      text [set every repeat] = $digit
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    MouseComponent mouse_resp_2
      clickable = response_box_2
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      startVal [time (s)] = 0.0
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    CodeComponent code_14
      Code Type = Py
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      Begin Experiment:
        import numpy as np
      Begin Routine:
        # Initialize variables for response tracking
        trial_clock = core.Clock()
        max_response_time = 2.0  # 2000ms max response time

        # Track mouse positions
        mouse_positions = []
        mouse_timestamps = []

        # Response tracking
        response_made = False
        movement_continued = False
        movement_stopped = False
        last_positions = []  # For tracking if movement has stopped
        still_duration = 0
        correct = False

        # Convert stimulus to correct type
        current_digit = int(digit)
      Each Frame:
        # Record current position and time
        current_pos = mouse_resp.getPos()
        current_time = trial_clock.getTime()
        mouse_positions.append(current_pos)
        mouse_timestamps.append(current_time)

        # Add position to recent positions list (for checking if stopped)
        last_positions.append(current_pos)
        if len(last_positions) > 15:  # Keep last ~250ms of positions (assuming 60Hz)
            last_positions.pop(0)

        # Check if mouse has reached response box (for Go trials)
        if mouse_resp.isPressedIn(response_box_2) and not response_made:
            response_made = True
            rt = current_time

            # For Go trials, check if clicked in response box
            buttons = mouse_resp.getPressed()
            clicked_in_box = buttons[0] > 0

            # For Go trials, movement and click is correct
            if trial_type == "go":
                correct = clicked_in_box
            else:
                correct = False  # For NoGo trials, clicking is wrong

            # Record click position
            click_pos = current_pos
            thisExp.addData('response_box_clicked', clicked_in_box)
            thisExp.addData('click_pos_x', click_pos[0])
            thisExp.addData('click_pos_y', click_pos[1])

            continueRoutine = False

        # Check if movement has stopped (for No-Go trials)
        if len(last_positions) >= 15:
            # Calculate maximum movement distance in last samples
            pos_array = np.array(last_positions)
            max_distance = np.max(np.sqrt(np.sum((pos_array - pos_array[0])**2, axis=1)))

            if max_distance < 5:  # Less than 5 pixels movement = stopped
                movement_stopped = True
                still_duration += 1/60  # Assuming 60Hz refresh rate

                # For No-Go trials, staying still for 500ms is correct
                if still_duration >= 0.5 and trial_type == "nogo":
                    correct = True
                    rt = current_time
                    continueRoutine = False
            else:
                still_duration = 0
                movement_stopped = False
                movement_continued = True

        # Check if time has run out
        if current_time >= max_response_time:
            rt = max_response_time

            # For No-Go trials, not moving is correct
            if trial_type == "nogo" and not movement_continued:
                correct = True
            # For Go trials, not responding is incorrect
            elif trial_type == "go":
                correct = False

            continueRoutine = False

        # Record mouse data every frame
        current_pos = mouse_tracking.getPos()
        current_time = mouse_track_clock.getTime()
        mouse_track_data['x'].append(current_pos[0])
        mouse_track_data['y'].append(current_pos[1])
        mouse_track_data['time'].append(current_time)

        # Calculate velocity (if not first frame)
        if len(mouse_track_data['time']) > 1:
            dt = current_time - prev_time
            if dt > 0:  # Avoid division by zero
                vx = (current_pos[0] - prev_x) / dt
                vy = (current_pos[1] - prev_y) / dt
            else:
                vx, vy = 0, 0
            mouse_track_data['velocity_x'].append(vx)
            mouse_track_data['velocity_y'].append(vy)
        else:
            mouse_track_data['velocity_x'].append(0)
            mouse_track_data['velocity_y'].append(0)

        # Record clicks
        buttons = mouse_tracking.getPressed()
        mouse_track_data['clicks'].append(buttons[0])  # Left button
        if buttons[0] == 1 and len(mouse_track_data['clicks']) > 1 and mouse_track_data['clicks'][-2] == 0:
            # New click detected
            mouse_track_data['click_time'].append(current_time)

        # Update previous values for next frame
        prev_x, prev_y = current_pos
        prev_time = current_time
      End Routine:
        # Save data
        thisExp.addData('mouse_positions_x', [pos[0] for pos in mouse_positions])
        thisExp.addData('mouse_positions_y', [pos[1] for pos in mouse_positions])
        thisExp.addData('mouse_timestamps', mouse_timestamps)
        thisExp.addData('response_made', response_made)
        thisExp.addData('movement_continued', movement_continued)
        thisExp.addData('movement_stopped', movement_stopped)
        thisExp.addData('correct', correct)
        thisExp.addData('rt', rt)


        # Calculate additional mouse metrics
        if len(mouse_positions) > 1:
            # Convert to numpy arrays for calculations
            pos_array = np.array(mouse_positions)
            times_array = np.array(mouse_timestamps)

            # Path length (total distance traveled)
            diffs = np.diff(pos_array, axis=0)
            path_length = np.sum(np.sqrt(np.sum(diffs**2, axis=1)))

            # Maximum deviation from straight line
            if len(pos_array) > 2:
                start_point = pos_array[0]
                end_point = pos_array[-1]
                # Vector from start to end
                direct_vector = end_point - start_point
                direct_length = np.sqrt(np.sum(direct_vector**2))

                if direct_length > 0:  # Avoid division by zero
                    # Normalized vector
                    direct_norm = direct_vector / direct_length

                    # For each point, calculate perpendicular distance to direct path
                    deviations = []
                    for point in pos_array:
                        # Vector from start to point
                        to_point = point - start_point
                        # Project to_point onto direct_norm
                        projection_length = np.dot(to_point, direct_norm)
                        # Calculate projection point
                        projection_point = start_point + projection_length * direct_norm
                        # Calculate deviation (perpendicular distance)
                        deviation = np.sqrt(np.sum((point - projection_point)**2))
                        deviations.append(deviation)

                    max_deviation = np.max(deviations)
                else:
                    max_deviation = 0
            else:
                max_deviation = 0

            # Area under curve
            auc = 0
            if len(deviations) > 0:
                auc = np.sum(deviations) / len(deviations)

            # Number of direction changes (X and Y separately)
            x_dirs = np.sign(np.diff(pos_array[:, 0]))
            y_dirs = np.sign(np.diff(pos_array[:, 1]))
            x_changes = np.sum(np.abs(np.diff(x_dirs)) > 0)
            y_changes = np.sum(np.abs(np.diff(y_dirs)) > 0)

            # Calculate acceleration
            if len(times_array) > 2:
                dt = np.diff(times_array)
                velocities = np.diff(pos_array, axis=0)
                valid_dts = dt > 0  # Avoid division by zero

                v_x = np.zeros(len(dt))
                v_y = np.zeros(len(dt))

                v_x[valid_dts] = velocities[valid_dts, 0] / dt[valid_dts]
                v_y[valid_dts] = velocities[valid_dts, 1] / dt[valid_dts]

                # Acceleration (change in velocity)
                a_x = np.diff(v_x)
                a_y = np.diff(v_y)

                # Peak acceleration
                peak_acceleration = np.max(np.sqrt(a_x**2 + a_y**2))
            else:
                peak_acceleration = 0

            # Save all metrics
            thisExp.addData('path_length', path_length)
            thisExp.addData('max_deviation', max_deviation)
            thisExp.addData('auc', auc)
            thisExp.addData('x_direction_changes', x_changes)
            thisExp.addData('y_direction_changes', y_changes)
            thisExp.addData('peak_acceleration', peak_acceleration)
  Routine ITI_prac
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    CodeComponent code_15
      Code Type = Auto->JS
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      Begin Experiment:
        # Set up possible ITI durations
        possible_iti_durations = [0.5, 0.6, 0.7, 0.8, 0.9, 1.0]  # 500-1000ms in 100ms increments
      Begin Routine:
        # Hide the mouse cursor during ITI
        win.mouseVisible = False

        # Choose a random ITI duration for this trial
        import random
        this_iti_duration = random.choice(possible_iti_durations)
        thisExp.addData('iti_duration', this_iti_duration)  # Record the selected duration
      Each Frame:
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      End Routine:
        # Make mouse visible again and reset position
        win.mouseVisible = True
        # Save all tracked mouse data to experiment
        thisExp.addData('mouse_track_x', mouse_track_data['x'])
        thisExp.addData('mouse_track_y', mouse_track_data['y'])
        thisExp.addData('mouse_track_time', mouse_track_data['time'])
        thisExp.addData('mouse_track_velocity_x', mouse_track_data['velocity_x'])
        thisExp.addData('mouse_track_velocity_y', mouse_track_data['velocity_y'])
        thisExp.addData('mouse_track_clicks', mouse_track_data['clicks'])
        thisExp.addData('mouse_track_click_time', mouse_track_data['click_time'])
    TextComponent blank_2
      letterHeight = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = this_iti_duration
      text = .
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  Routine prac_2
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    TextComponent exp_start_inst_2
      letterHeight = 50
      startVal [time (s)] = 0.0
      wrapWidth = 1000
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      text:
        Pause!

        Please take a break. Press space bar to contine to experiment
    KeyboardComponent resp_Exp_begin_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial_shuffle
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    CodeComponent code_16
      Code Type = Py
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      Begin Routine:
        if trials.thisN == 0 and block_type == "go_nogo" and trials_file == "go_nogo.xlsx":
            import random
            import copy

            def create_valid_sequence(trial_list):
                for attempt in range(1000):
                    random.shuffle(trial_list)
                    nogo_indices = [i for i, t in enumerate(trial_list) if t['trial_type'] == 'nogo']
                    if all(nogo_indices[i+1] - nogo_indices[i] >= 2 for i in range(len(nogo_indices)-1)):
                        print(f"✅ Valid sequence created on attempt {attempt+1}")
                        return trial_list
                print("⚠ Failed to create valid non-adjacent NoGo sequence after 1000 attempts.")
                return trial_list  # fallback

            trials.trialList = create_valid_sequence(copy.deepcopy(trials.trialList))
            print("✅ Applied no-consecutive-NoGo shuffling.")
            print("Trial sequence:", [t['digit'] for t in trials.trialList])
Flow
  Routine welcome
  Routine instruction
  Routine instruction_2
  Routine expStart
  LoopInitiator blocks_loop loopType="TrialHandler"
    conditionsFile = block_sequence.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'block_type': 'go_only', 'block_number': 1, 'trials_count': 18, 'is_practice': 1, 'trials_file': 'go_only.xlsx'},
      {'block_type': 'go_nogo_prac', 'block_number': 2, 'trials_count': 18, 'is_practice': 1, 'trials_file': 'go_nogo_prac.xlsx'},
      {'block_type': 'go_only', 'block_number': 3, 'trials_count': 18, 'is_practice': 0, 'trials_file': 'go_only.xlsx'},
      {'block_type': 'go_nogo', 'block_number': 4, 'trials_count': 60, 'is_practice': 0, 'trials_file': 'go_nogo.xlsx'},
      {'block_type': 'go_nogo', 'block_number': 5, 'trials_count': 60, 'is_practice': 0, 'trials_file': 'go_nogo.xlsx'},
      {'block_type': 'go_only', 'block_number': 6, 'trials_count': 18, 'is_practice': 0, 'trials_file': 'go_only.xlsx'},
      {'block_type': 'go_nogo', 'block_number': 7, 'trials_count': 60, 'is_practice': 0, 'trials_file': 'go_nogo.xlsx'},
      {'block_type': 'go_nogo', 'block_number': 8, 'trials_count': 60, 'is_practice': 0, 'trials_file': 'go_nogo.xlsx'},
      {'block_type': 'go_only', 'block_number': 9, 'trials_count': 18, 'is_practice': 0, 'trials_file': 'go_only.xlsx'},
      {'block_type': 'go_nogo', 'block_number': 10, 'trials_count': 60, 'is_practice': 0, 'trials_file': 'go_nogo.xlsx'},
      {'block_type': 'go_nogo', 'block_number': 11, 'trials_count': 60, 'is_practice': 0, 'trials_file': 'go_nogo.xlsx'},
      {'block_type': 'go_only', 'block_number': 12, 'trials_count': 18, 'is_practice': 0, 'trials_file': 'go_only.xlsx'},
      {'block_type': 'go_nogo', 'block_number': 13, 'trials_count': 60, 'is_practice': 0, 'trials_file': 'go_nogo.xlsx'}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
    Routine block_setup
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $trials_file
      loopType = sequential
      nReps = 1
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      conditions:
        [{'digit': 1, 'trial_type': 'nogo', 'correct_response': 'none'},
        {'digit': 2, 'trial_type': 'go', 'correct_response': 'left'},
        {'digit': 4, 'trial_type': 'go', 'correct_response': 'left'},
        {'digit': 3, 'trial_type': 'go', 'correct_response': 'left'},
        {'digit': 6, 'trial_type': 'go', 'correct_response': 'right'},
        {'digit': 7, 'trial_type': 'go', 'correct_response': 'right'},
        {'digit': 8, 'trial_type': 'go', 'correct_response': 'right'},
        {'digit': 9, 'trial_type': 'nogo', 'correct_response': 'none'},
        {'digit': 1, 'trial_type': 'nogo', 'correct_response': 'left'},
        {'digit': 2, 'trial_type': 'go', 'correct_response': 'left'},
        {'digit': 4, 'trial_type': 'go', 'correct_response': 'left'},
        {'digit': 3, 'trial_type': 'go', 'correct_response': 'left'},
        {'digit': 6, 'trial_type': 'go', 'correct_response': 'right'},
        {'digit': 7, 'trial_type': 'go', 'correct_response': 'right'},
        {'digit': 8, 'trial_type': 'go', 'correct_response': 'right'},
        {'digit': 9, 'trial_type': 'nogo', 'correct_response': 'none'}]
      Routine start_hold
      Routine threshold
      Routine stimulus
      Routine ITI
    LoopTerminator trials
    Routine block_end
  LoopTerminator blocks_loop
